PsychoPy2experiment version="2020.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001', 'age': '', 'sex': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = RSpan
  logging level = debug
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Routines
  Routine TitleScreen
    TextComponent introScreen
      font = Times New Roman
      letterHeight = 0.10
      startVal [time (s)] = 0.0
      text = Reading Span
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    TextComponent responseIndicator1
      font = Times New Roman
      letterHeight = 0.040
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Click the mouse to continue.
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    MouseComponent mouse_1
      forceEndRoutineOnPress = any click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine PracticeLetterInstruct1
    TextComponent instr_1
      font = Times New Roman
      letterHeight = 0.040
      startVal [time (s)] = 0.0
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      text:
        In this experiment you will try to memorize letters you see on the screen while you also read sentences.

        In the next minutes, you will have some practice to get you familiar with how the experiment works.

        We will begin by practicing the letter part of the experiment.
    TextComponent continue_2
      font = Times New Roman
      letterHeight = 0.040
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
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      text:
        Click the mouse to continue.
    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine PracticeLetterInstruct2
    TextComponent instr_2
      font = Times New Roman
      letterHeight = 0.040
      startVal [time (s)] = 0.0
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      text:
        For this practice set, letters will appear on the screen one at a time.

        Try to remember each letter in the order presented.

        After 2 letters have been shown, you will see a screen listing 12 possible letters with a check box beside each one.

        Your job is to select each letter in the order presented. To do this, use the mouse to select the box beside each letter. The letters you select will appear at the bottom of the screen.
    TextComponent continue_3
      font = Times New Roman
      letterHeight = 0.040
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
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      text:
        Click the mouse to continue.
    MouseComponent mouse_3
      forceEndRoutineOnPress = any click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine PracticeLetterInstruct3
    TextComponent instr_3
      font = Times New Roman
      letterHeight = 0.040
      startVal [time (s)] = 0.0
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      text:
        When you have selected all the letters, and they are in the correct order, hit the EXIT box at the bottom right of the screen.

        If you make a mistake, hit the CLEAR box to start over.

        If you forget one of the letters, click the BLANK box to mark the spot for the missing letter.

        Remember, it is very important to get the letters in the same order as you see them. If you forget one, use the BLANK box to mark the position.

        Do you have any questions so far?
    TextComponent continue_4
      font = Times New Roman
      letterHeight = 0.040
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = When you’re ready, click the mouse button to start the letter practice.
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    MouseComponent mouse_4
      forceEndRoutineOnPress = any click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine practiceList
    TextComponent letterAppear
      font = Times New Roman
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        from numpy.random import choice
      Begin Routine:
        letters = ["F", "P", "Q", "J", "H", "K", "T", "S", "N", "R", "Y", "L"]
        firstLetter = choice(letters)
        letters.remove(firstLetter)
        secondLetter = choice(letters)
        letters.append(firstLetter)

        letterAppear.setText(firstLetter)
        letterAppear_2.setText(secondLetter)
    TextComponent letterAppear_2
      font = Times New Roman
      letterHeight = 0.1
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
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  Routine practiceRecall
    MouseComponent mouseClear
      clickable = clearButton
      forceEndRoutineOnPress = never
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        correctLettersPractice=0
        correctLettersTrial = 0
      Begin Routine:
        checkboxes = [Fbutton, Pbutton, Qbutton, Jbutton, Hbutton, Kbutton, Tbutton, Sbutton, Nbutton, Rbutton, Ybutton, Lbutton]
        clicked = []
        clickedTrack = []

        timer = core.Clock()
        timer.reset()
      Each Frame:
        if mouseExit.isPressedIn(exitButton):
            continueRoutine = False

        if mouseBlank.isPressedIn(blankButton):
            clicked.append(blankButton)
            clickedTrack.append(box)
            answer1.color = "white"
            answer2.color = "white"
            if len(clicked)==1:
                answer1.setText("Blank")
            elif len(clicked) ==2:
               answer2.setText("Blank")

        for box in checkboxes:
            if mouse1.isPressedIn(box) and box.name not in clicked and len(clicked)==0:
                box.fillColor = "black"
                clicked.append(box.name)
                clickedTrack.append(box)
                answer1.color = "white"
                if box.name is "Fbutton":
                    answer1.setText("F")
                elif box.name is "Pbutton":
                    answer1.setText("P")
                elif box.name is "Qbutton":
                    answer1.setText("Q")
                elif box.name is "Jbutton":
                    answer1.setText("J")
                elif box.name is "Hbutton":
                    answer1.setText("H")
                elif box.name is "Kbutton":
                    answer1.setText("K")
                elif box.name is "Tbutton":
                    answer1.setText("T")
                elif box.name is"Sbutton":
                    answer1.setText("S")
                elif box.name is "Nbutton":
                    answer1.setText("N")
                elif box.name is "Rbutton":
                    answer1.setText("R")
                elif box.name is "Ybutton":
                    answer1.setText("Y")
                elif box.name is "Lbutton":
                    answer1.setText("L")

        for box in checkboxes:
            if mouse1.isPressedIn(box) and box.name not in clicked and len(clicked) ==1:
                box.fillColor = "black"
                clicked.append(box.name)
                answer2.color = "white"
                clickedTrack.append(box)
                if box.name is "Fbutton":
                    answer2.setText("F")
                elif box.name is "Pbutton":
                    answer2.setText("P")
                elif box.name is "Qbutton":
                    answer2.setText("Q")
                elif box.name is "Jbutton":
                    answer2.setText("J")
                elif box.name is "Hbutton":
                    answer2.setText("H")
                elif box.name is "Kbutton":
                    answer2.setText("K")
                elif box.name is "Tbutton":
                    answer2.setText("T")
                elif box.name is"Sbutton":
                    answer2.setText("S")
                elif box.name is "Nbutton":
                    answer2.setText("N")
                elif box.name is "Rbutton":
                    answer2.setText("R")
                elif box.name is "Ybutton":
                    answer2.setText("Y")
                elif box.name is "Lbutton":
                       answer2.setText("L")
                elif box.name is "blankButton":
                    answer2.setText("Blank")

        if mouseClear.isPressedIn(clearButton):
            if len(clicked) ==1:
                if clickedTrack[0] is not blankButton:
                    clickedTrack[0].fillColor = "green"
            answer1.setText("")
            answer2.setText("")
            if len(clicked)  ==2:
                if clickedTrack[0] is not blankButton:
                    clickedTrack[0].fillColor = "green"
                if clickedTrack[1] is not blankButton:
                    clickedTrack[1].fillColor  = "green"
            clicked = []
            clickedTrack = []
      End Routine:
        #Correct Point System
        correctLettersTrial = 0
        if practiceLoop.finished == True:
            for answer in clicked:
                if clicked[0] is firstLetter and clicked[1] is secondLetter:
                    correctLettersTrial +=1
                    trial.addData('correctLettersTrial', correctLettersTrial)
                    trial.addData('routineTime', timer.getTime())
        else:
                for answer in clicked:
                    if clicked[0] is firstLetter and clicked[1] is secondLetter:
                        correctLettersPractice +=1
                    trial.addData('correctLettersPractice', correctLettersPractice)
                    trial.addData('routineTime', timer.getTime())
    MouseComponent mouseExit
      clickable = exitButton
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    MouseComponent mouse1
      clickable = Fbutton, Pbutton, Qbutton, Jbutton, Hbutton, Kbutton, Tbutton, Sbutton, Nbutton, Rbutton, Ybutton, Lbutton
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    PolygonComponent blankButton
      fillColor = $[1,1,1]
      pos = (0.4, -0.4)
      shape = rectangle
      size = (0.15, 0.08)
      startVal [time (s)] = 0.0
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    TextComponent gatherResponseText
      font = Times New Roman
      letterHeight = 0.040
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Select the letters in the order presented. Use the blank button to fill in forgotten letters. 
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    PolygonComponent Fbutton
      fillColor [set every repeat] = green
      pos = (-.3, 0.3)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent F_text
      font = Times New Roman
      letterHeight = 0.040
      pos = (-.23, 0.3)
      startVal [time (s)] = 0.0
      text = F
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    PolygonComponent Pbutton
      fillColor [set every repeat] = green
      pos = (-0.3, 0.20)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent Qbutton
      fillColor [set every repeat] = green
      pos = (-0.3, 0.10)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent Jbutton
      fillColor [set every repeat] = green
      pos = (-0.3, 0.0)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent Hbutton
      fillColor [set every repeat] = green
      pos = (-0.3, -0.10)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent Kbutton
      fillColor [set every repeat] = green
      pos = (-0.3, -.20)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent Tbutton
      fillColor [set every repeat] = green
      pos = (0.2, 0.3)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent Sbutton
      fillColor [set every repeat] = green
      pos = (0.2, 0.20)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent Nbutton
      fillColor [set every repeat] = green
      pos = (0.2, 0.10)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent Rbutton
      fillColor [set every repeat] = green
      pos = (0.2, 0.00)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent Ybutton
      fillColor [set every repeat] = green
      pos = (0.2, -0.10)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent Lbutton
      fillColor [set every repeat] = green
      pos = (0.2, -0.20)
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent clearButton
      fillColor = white
      pos = (0, -0.4)
      shape = rectangle
      size = (0.15, 0.08)
      startVal [time (s)] = 0.0
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    PolygonComponent exitButton
      fillColor = white
      pos = (-0.4, -0.4)
      shape = rectangle
      size = (0.15, 0.08)
      startVal [time (s)] = 0.0
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    TextComponent exitText
      color = black
      font = Times New Roman
      letterHeight = 0.040
      pos = (-0.4, -0.4)
      startVal [time (s)] = 0.0
      text = EXIT
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    TextComponent clearText
      color = black
      font = Times New Roman
      letterHeight = 0.040
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = CLEAR
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    TextComponent P_text
      font = Times New Roman
      letterHeight = 0.040
      pos = (-.23, 0.2)
      startVal [time (s)] = 0.0
      text = P
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    TextComponent Q_text
      font = Times New Roman
      letterHeight = 0.040
      pos = (-.23, 0.10)
      startVal [time (s)] = 0.0
      text = Q
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    TextComponent J_text
      font = Times New Roman
      letterHeight = 0.040
      pos = (-.23, 0.0)
      startVal [time (s)] = 0.0
      text = J
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    TextComponent H_text
      font = Times New Roman
      letterHeight = 0.040
      pos = (-.23, -0.1)
      startVal [time (s)] = 0.0
      text = H
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    TextComponent K_text
      font = Times New Roman
      letterHeight = 0.040
      pos = (-.23, -0.2)
      startVal [time (s)] = 0.0
      text = K
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    TextComponent T_text
      font = Times New Roman
      letterHeight = 0.040
      pos = (.27, 0.3)
      startVal [time (s)] = 0.0
      text = T
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    TextComponent S_text
      font = Times New Roman
      letterHeight = 0.040
      pos = (.27, 0.2)
      startVal [time (s)] = 0.0
      text = S
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    TextComponent N_text
      font = Times New Roman
      letterHeight = 0.040
      pos = (.27, 0.1)
      startVal [time (s)] = 0.0
      text = N
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    TextComponent R_text
      font = Times New Roman
      letterHeight = 0.040
      pos = (.27, 0.0)
      startVal [time (s)] = 0.0
      text = R
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    TextComponent Y_text
      font = Times New Roman
      letterHeight = 0.040
      pos = (.27, -0.1)
      startVal [time (s)] = 0.0
      text = Y
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    TextComponent L_text
      font = Times New Roman
      letterHeight = 0.040
      pos = (.27, -0.2)
      startVal [time (s)] = 0.0
      text = L
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    TextComponent blankText
      color = black
      font = Times New Roman
      letterHeight = 0.040
      pos = (0.4, -0.4)
      startVal [time (s)] = 0.0
      text = BLANK
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    TextComponent answer1
      color = grey
      font = Times New Roman
      letterHeight = 0.040
      pos = (-0.05, -0.20)
      startVal [time (s)] = 0.0
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    TextComponent answer2
      color = grey
      font = Times New Roman
      letterHeight = 0.040
      pos = (0.05, -0.2)
      startVal [time (s)] = 0.0
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    MouseComponent mouseBlank
      clickable = blankButton
      forceEndRoutineOnPress = any click
      newClicksOnly = False
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine PractSentInst1
    TextComponent instr_4
      font = Times New Roman
      letterHeight = 0.040
      startVal [time (s)] = 0.0
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      text:
        Now you will practice doing the sentence reading part of the experiment.

        A sentence will appear on the screen, like this:
        “I like to run in the park”

        As soon as you see the sentence, you should read it and determine if it makes sense or not.

        The above sentence makes sense.

        When you have read the sentence and determined whether it makes sense or not, you will click the mouse buttton.
    TextComponent continue_5
      font = Times New Roman
      letterHeight = 0.040
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
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      text:
        Click the mouse to continue.
    MouseComponent mouse_5
      forceEndRoutineOnPress = any click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine PractSenInst2
    TextComponent instr_5
      font = Times New Roman
      letterHeight = 0.040
      startVal [time (s)] = 0.0
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      text:
        You will then see “This sentence makes sense.” displayed on the next screen along with a box marked TRUE and a box marked FALSE.

        If the sentence on the previous screen made sense, click on the TRUE box with the box.

        If the sentence did not make sense, click on the FALSE box.

        After you click on one of the boxes, the computer will tell you if you made the right choice.
    TextComponent continue_6
      font = Times New Roman
      letterHeight = 0.040
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Click the mouse to continue.
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    MouseComponent mouse_6
      forceEndRoutineOnPress = any click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine PracSenInst3
    TextComponent instr_6
      font = Times New Roman
      letterHeight = 0.040
      startVal [time (s)] = 0.0
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      text:
        It is VERY important that you answer the sentence problems correctly. It is also important that you try and read the sentences as quickly as you can.

        Do you have any questions?
    TextComponent continue_7
      font = Times New Roman
      letterHeight = 0.040
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = When you’re ready, click the mouse to try some practice problems. 
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    MouseComponent mouse_7
      forceEndRoutineOnPress = any click
      saveMouseState = never
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine RSPANpracticeInstruct1_2
    TextComponent instr_7
      font = Times New Roman
      letterHeight = 0.040
      startVal [time (s)] = 0.0
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      text:
        Now you will practice doing both parts of the experiment at the same time.

        In the next practice set, you will be given one sentence to read. Once you make your decision about the sentence, a letter will appear on the screen. Try and remember the letter.

        In the previous section where you only read the sentences, the computer computed your average time to read the sentences. If you take longer than your average time, the computer will automatically move you onto the next part, thus skipping the True or False part and will count that problem as a sentence error. Thefore it is a VERY important to read the sentences as quickly and as accurately as possible.
    TextComponent continue_8
      font = Times New Roman
      letterHeight = 0.040
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
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      text:
        Click the mouse to continue.
    MouseComponent mouse_8
      forceEndRoutineOnPress = any click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine RSPANpracticeInstruct2
    TextComponent instr_8
      font = Times New Roman
      letterHeight = 0.040
      startVal [time (s)] = 0.0
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      text:
        After the letter goes away, another sentence will appear, and then another letter.

        At the end of each set of letters and sentences, a recall screen will appear. Use the mouse to select the letter you just saw. Try your best to get the letters in the correct order.

        It is important to work QUICKLY and ACCURATELY on the sentences. Make sure you know whether the sentences make sense or not before clicking to the next screen.

        You will not be told if you answer regarding the sentence is correct.
    TextComponent continue_9
      font = Times New Roman
      letterHeight = 0.040
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
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      text:
        Click the mouse button to continue.
    MouseComponent mouse_9
      forceEndRoutineOnPress = any click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine feedbackinstruct
    TextComponent instr_9
      font = Times New Roman
      letterHeight = 0.040
      startVal [time (s)] = 0.0
      text = After the recall screen, you will be given feedback about your performance regarding both the number of letters recalled and the percent correct on the sentence problems.
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    TextComponent continue_10
      font = Times New Roman
      letterHeight = 0.040
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
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      text:
        Do you have any questions?
        Click the mouse to continue.
    MouseComponent mouse_10
      forceEndRoutineOnPress = any click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine feedbackinstruct2
    TextComponent instr_10
      font = Times New Roman
      letterHeight = 0.040
      startVal [time (s)] = 0.0
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      text:
        During the feedback, you will see a number in red in the top right of the screen.
        This indicates your percent correct for the sentence problems for the entire experiment.

        It is VERY important for you to keep this at least an 85%.

        For our purposes, we can only use data where the participant was at least 85% accurate on the sentences.

        Therefore, try to perform at least an 85% on the sentence problems WHILE doing your best to recall as many letters as possible.
    TextComponent continue_11
      font = Times New Roman
      letterHeight = 0.040
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
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      text:
        Do you have any questions?
        Click the mouse to try some practice problems.
    MouseComponent mouse_11
      forceEndRoutineOnPress = any click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine sentence
    TextComponent sentenceText
      font = Times New Roman
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $sentence
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    TextComponent continue_12
      font = Times New Roman
      letterHeight = 0.040
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = When you have read the sentence, click the mouse to continue.
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    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Experiment:
        avgTime = 0
        totalTime = 0
      Begin Routine:
        countingClock = core.Clock()
      Each Frame:
        #Establishing and Displaying Timer
        timeRemaining = countingClock.getTime()

        minutes = int (timeRemaining/60.0)
        tenSeconds= int((timeRemaining - (minutes*60))/10.0)
        oneSeconds = int (timeRemaining - (minutes*60 + tenSeconds*10))
        timeText = str(minutes) + ':'  + str(tenSeconds) + str(oneSeconds)
      End Routine:
        totalTime+=countingClock.getTime()
        avgTime = totalTime/15 #number repetitions
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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  Routine sentenceResponse
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        totalCorrectPractice = 0
      Begin Routine:
        clicked =0

        correctText = ""
        trueButton.fillColor = "white"
        falseButton.fillColor = "white"

        timerC = core.Clock()
        timerC.reset()
      Each Frame:
        if mouse12.isPressedIn(trueButton) and CorrectResp == 'correct' and clicked == 0:
            trueButton.fillColor = "green"
            correct=1
            totalCorrectPractice +=1
            clicked=1
        elif mouse12.isPressedIn(falseButton) and CorrectResp == 'incorrect' and clicked ==0:
            trueButton.fillColor = "green"
            correct=1
            totalCorrectPractice +=1
            clicked  = 1
            countdownStarted = True
        elif mouse12.isPressedIn(trueButton) and CorrectResp ==  'incorrect' and clicked==0:
            trueButton.fillColor = "green"
            clicked = 1
            totalCorrectPractice +=0
            correct = 0
        elif mouse12.isPressedIn(falseButton) and CorrectResp ==  'correct' and clicked ==0:
            trueButton.fillColor = "green"
            clicked = 1
            totalCorrectPractice +=0
            correct = 0
        else:
            correctText = ""
            trueButton.fillColor = "white"
            falseButton.fillColor = "white"
            clicked = 0
            correct = 0
      End Experiment:
        trials.addData('totalCorrectPractice', totalCorrectPractice)
      End Routine:
        practiceLoop.addData('routineTime', timerC.getTime())

        if (correct ==1):
            correctText= "Correct!"
        elif  (correct == 0):
            correctText  = "Incorrect"
    TextComponent senseText
      font = Times New Roman
      letterHeight = 0.1
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = This sentence makes sense.
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    PolygonComponent trueButton
      fillColor [set every repeat] = white
      pos = (-0.20, -0.2)
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    TextComponent trueText
      color = black
      font = Times New Roman
      letterHeight = 0.04
      pos = (-0.20, -0.2)
      startVal [time (s)] = 0.0
      text = TRUE
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    PolygonComponent falseButton
      fillColor [set every repeat] = white
      pos = (0.20, -0.2)
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    TextComponent falseText
      color = black
      font = Times New Roman
      letterHeight = 0.040
      pos = (0.20, -0.2)
      startVal [time (s)] = 0.0
      text = FALSE
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    MouseComponent mouse12
      clickable = trueButton, falseButton
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine sentenceCorrect
  Routine sentenceFeedback
  Routine practiceList2
    TextComponent letterAppear2
      font = Times New Roman
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $Letters
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  Routine feedback
    TextComponent sentenceFeedback2
      color = blue
      font = Times New Roman
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $correctText
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    CodeComponent code_4
      Code Type = Auto->JS
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      End Routine:
        if (correct ==1):
            sentenceFeedback2.setText("Correct!")
        elif  (correct == 0):
            sentenceFeedback2.setText("Incorrect")

        practiceSentence.addData('correctSentence', correct)
        practiceSentence.addData('totalCorrectSentence', totalCorrectPractice)
  Routine sentence2
    TextComponent sentenceText2
      font = Times New Roman
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $sentence
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    MouseComponent mouse_12
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    TextComponent continue_13
      font = Times New Roman
      letterHeight = 0.040
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = When you have read the sentence, click the mouse to continue.
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Experiment:
        timerReading = core.Clock()

        avgTime = 0
        totalTime = 0
      Begin Routine:
        countdownClock = core.CountdownTimer(avgTime)
      Each Frame:
        #Establishing and Displaying Timer
        timeRemaining = countdownClock.getTime()
        if timeRemaining <=0.0:
            continueRoutine = False
            sentenceTrial.finished = True
            continueExperiment = True
        else:
            minutes = int (timeRemaining/60.0)
            tenSeconds= int((timeRemaining - (minutes*60))/10.0)
            oneSeconds = int (timeRemaining - (minutes*60 + tenSeconds*10))
            timeText = str(minutes) + ':'  + str(tenSeconds) + str(oneSeconds)
    TextComponent text
      letterHeight = 0.1
      pos = (0.4, -0.4)
      startVal [time (s)] = 0.0
      text [set every frame] = $timeText
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  Routine feedback_2
    TextComponent lettersCorrect
      color = red
      font = Times New Roman
      letterHeight = 0.1
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $percentCorrect
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Experiment:
        correctLetters = 0
      Begin Routine:
        lettersRecalled = 'You recalled '  + str(correctLetters) + ' letters correctly out of ' + str(7) + 'letters.'


        percentCorrect = 'Percentage correct: ' + str(totalCorrectPractice/12) + '%'

        #12 represents the number of sentences (can change)
      Each Frame:
        lettersRecalled = 'You recalled ' +  str(correctLetters) + ' letters correctly out of ' + str(7) + 'letters.'


        percentCorrect = 'Percentage correct: ' + str(totalCorrectPractice/12 ) + '%'

        #12 represents the number of sentences (can change)
    TextComponent text_2
      font = Times New Roman
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $lettersRecalled
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    TextComponent Feedback
      font = Times New Roman
      letterHeight = 0.1
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Feedback
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  Routine sentenceResponseTrial
    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Experiment:
        totalCorrectSentenceTrial= 0
      Begin Routine:
        clicked =0

        correctText = ""
        trueButton.fillColor = "white"
        falseButton.fillColor = "white"

        timerC = core.Clock()
        timerC.reset()
      Each Frame:
        if mouse12.isPressedIn(trueButton) and CorrectResp == 'correct' and clicked == 0:
            trueButton.fillColor = "green"
            correct=1
            totalCorrectSentenceTrial +=1
            clicked=1
        elif mouse12.isPressedIn(falseButton) and CorrectResp == 'incorrect' and clicked ==0:
            trueButton.fillColor = "green"
            correct=1
            totalCorrectSentenceTrial +=1
            clicked  = 1
            countdownStarted = True
        elif mouse12.isPressedIn(trueButton) and CorrectResp ==  'incorrect' and clicked==0:
            trueButton.fillColor = "green"
            clicked = 1
            totalCorrectSentenceTrial +=0
            correct = 0
        elif mouse12.isPressedIn(falseButton) and CorrectResp ==  'correct' and clicked ==0:
            trueButton.fillColor = "green"
            clicked = 1
            totalCorrectSentenceTrial +=0
            correct = 0
        else:
            correctText = ""
            trueButton.fillColor = "white"
            falseButton.fillColor = "white"
            clicked = 0
            correct = 0
      End Routine:
        sentenceTrial.addData('totalCorrectSentenceTrial', totalCorrectSentenceTrial )
        practiceSentence.addData('correctSentenceTrial', correct)
    TextComponent senseText_2
      font = Times New Roman
      letterHeight = 0.1
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = This sentence makes sense.
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    PolygonComponent trueButton_2
      fillColor [set every repeat] = white
      pos = (-0.20, -0.2)
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    TextComponent trueText_2
      color = black
      font = Times New Roman
      letterHeight = 0.04
      pos = (-0.20, -0.2)
      startVal [time (s)] = 0.0
      text = TRUE
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    PolygonComponent falseButton_2
      fillColor [set every repeat] = white
      pos = (0.20, -0.2)
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    TextComponent falseText_2
      color = black
      font = Times New Roman
      letterHeight = 0.040
      pos = (0.20, -0.2)
      startVal [time (s)] = 0.0
      text = FALSE
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    MouseComponent mouse12_2
      clickable = trueButton, falseButton
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine letterTrial
Flow
  Routine TitleScreen
  Routine PracticeLetterInstruct1
  Routine PracticeLetterInstruct2
  Routine PracticeLetterInstruct3
  LoopInitiator practiceLoop loopType="TrialHandler"
    conditionsFile = practiceLetter.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('FirstLetter', 1), ('SecondLetter', None)]),
      OrderedDict([('FirstLetter', 2), ('SecondLetter', None)])]
    Routine practiceList
    Routine practiceRecall
  LoopTerminator practiceLoop
  Routine PractSentInst1
  Routine PractSenInst2
  Routine PracSenInst3
  LoopInitiator practiceSentence loopType="TrialHandler"
    conditionsFile = sentenceProblems.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('ID', 1), ('sentence', 'Andy was stopped by the policeman because he crossed the yellow heaven.\xa0 \xa0'), ('CorrectResp', False)]),
      OrderedDict([('ID', 2), ('sentence', 'During winter you can get a room at the beach for a very low rate.'), ('CorrectResp', True)]),
      OrderedDict([('ID', 3), ('sentence', 'People in our town are more giving and cheerful at Christmas time.\xa0'), ('CorrectResp', True)]),
      OrderedDict([('ID', 4), ('sentence', 'During the week of final spaghetti, I felt like I was losing my mind.'), ('CorrectResp', False)]),
      OrderedDict([('ID', 5), ('sentence', "After final exams are over, we'll be able to take a well-deserved rest.\xa0"), ('CorrectResp', True)]),
      OrderedDict([('ID', 6), ('sentence', 'After a hard day at the office, Bill often stops at the club to relax.\xa0'), ('CorrectResp', True)]),
      OrderedDict([('ID', 7), ('sentence', 'No matter how much we talk to him, he is never going to change.'), ('CorrectResp', True)]),
      OrderedDict([('ID', 8), ('sentence', "The prosecutor's dish was lost because it was not based on fact.\xa0"), ('CorrectResp', False)]),
      OrderedDict([('ID', 9), ('sentence', 'Every now and then I catch myself swimming blankly at the wall.'), ('CorrectResp', False)]),
      OrderedDict([('ID', 10), ('sentence', 'We were fifty lawns out at sea before we lost sight of land.'), ('CorrectResp', False)]),
      OrderedDict([('ID', 11), ('sentence', 'Throughout the entire ordeal, the hostages never appeared to lose hope.\xa0'), ('CorrectResp', True)])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
    Routine sentence
    Routine sentenceResponse
    Routine feedback
  LoopTerminator practiceSentence
  Routine RSPANpracticeInstruct1_2
  Routine RSPANpracticeInstruct2
  Routine feedbackinstruct
  Routine feedbackinstruct2
  LoopInitiator trial loopType="TrialHandler"
    conditionsFile = SentenceProblems2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('ID', 1), ('sentence', 'When I get up in the morning, the first thing I'), ('CorrectResp', 'correct')]),
      OrderedDict([('ID', 2), ('sentence', 'After yelling at the game, I knew I would have a'), ('CorrectResp', 'incorrect')]),
      OrderedDict([('ID', 3), ('sentence', 'Mary was asked to stop at the new mall to pick'), ('CorrectResp', 'correct')]),
      OrderedDict([('ID', 4), ('sentence', 'When it is cold, my mother always make me'), ('CorrectResp', 'correct')]),
      OrderedDict([('ID', 5), ('sentence', 'All parents hope their list will grow up to be'), ('CorrectResp', 'incorrect')]),
      OrderedDict([('ID', 6), ('sentence', 'When John and Amy moved to Canada, their'), ('CorrectResp', 'incorrect')]),
      OrderedDict([('ID', 7), ('sentence', 'In the fall, my gift and I love to work together'), ('CorrectResp', 'incorrect')]),
      OrderedDict([('ID', 8), ('sentence', "At church yesterday morning, Jim's daughter ma"), ('CorrectResp', 'incorrect')]),
      OrderedDict([('ID', 9), ('sentence', 'Unaware of the hunter, the deer wandered into'), ('CorrectResp', 'correct')]),
      OrderedDict([('ID', 10), ('sentence', 'Since it was the last game, it was hard to cope'), ('CorrectResp', 'correct')]),
      OrderedDict([('ID', 11), ('sentence', 'Because she gets to knife early, Amy usually get'), ('CorrectResp', 'incorrect')]),
      OrderedDict([('ID', 12), ('sentence', 'The only furniture Steve had in his bowl w'), ('CorrectResp', 'incorrect')])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
    LoopInitiator sentenceTrial loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine sentence2
      Routine sentenceResponseTrial
    LoopTerminator sentenceTrial
    Routine practiceList
    Routine practiceRecall
  LoopTerminator trial
  Routine feedback_2
